PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(-1.0000, -1.0000, -1.0000)
  consoleLoggingLevel = data
  expName = Test
  eyetracker = eyetracker.hw.mouse.EyeTracker
  keyboardBackend = ioHub
  logging level = data
  mgBlink = ['MIDDLE_BUTTON']
  mgMove = CONTINUOUS
  mgSaccade = 0.5
  runMode = 1
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Routines
  Routine Bunnies
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    ImageComponent bunnies
      image = material/bunnies.png
      size = (0.9, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Laughing_Baby
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    MovieComponent Attention_getter
      backend = ffpyplayer
      forceEndRoutine = False
      movie = material/laughing_baby.mp4
      size = (1.8,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Familiarization
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    PolygonComponent ROI_Familiarization
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(-1.0000, 1.0000, 1.0000)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent imgFam
      image [set every repeat] = $image_fam
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = material/amelie_rediscovery_ag (1) (mp3cut.net).mp3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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    CodeComponent code_familiarization
      Code Type = Auto->JS
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      Begin Routine:
        # Timer for this trial
        trialClock = core.Clock()  # overall max display time
        roiClock = core.Clock()    # timer for fixation in ROI

        # Gaze tracking
        gazeTime = 0  # will store the gaze time inside ROI
        sampleIndex = 0
        inROI = 0
        gazeInROI = False

        # Define ROI
        x0, y0 = ROI_Familiarization.pos[0] - ROI_Familiarization.size[0]/2, ROI_Familiarization.pos[1] - ROI_Familiarization.size[1]/2
        x1, y1 = ROI_Familiarization.pos[0] + ROI_Familiarization.size[0]/2, ROI_Familiarization.pos[1] + ROI_Familiarization.size[1]/2

        # Read times from Excel
        minTime = float(fam_IC_time)   # time required in ROI to end routine
        maxTime = float(fam_max_time)  # maximum trial duration

        print('Fam started')
      Each Frame:
        # ---------- ROI TIME ACCUMULATION ----------
        #if roi_familiarization.status == STARTED:

        # Current time
        currentTime = trialClock.getTime()
        # Get current gaze position
        gazePos = get_current_gaze()  # (x, y) or None

        if gazePos is not None:
            gazeX, gazeY = gazePos

            # Current gaze status
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROI = 1
                if not gazeInROI:       # first frame in ROI
                    roiClock.reset()
                    gazeInROI = True
                gazeTime = roiClock.getTime()  # update gazeTime continuously while in ROI
            else:
                inROI = 0
                if gazeInROI:           # gaze just left ROI
                    gazeTime += roiClock.getTime()  # finalize accumulated time
                    gazeInROI = False

        # ---------- SAVE RAW GAZE SAMPLE ----------
        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('gaze_time', currentTime)
        thisExp.addData('gaze_x', gazeX)
        thisExp.addData('gaze_y', gazeY)
        thisExp.addData('gaze_in_roi', inROI)
        thisExp.addData('gaze_time_in_roi', gazeTime)

        thisExp.nextEntry()  # VERY IMPORTANT

        # End routine if participant fixates long enough
        if gazeTime >= minTime:
            continueRoutine = False

        # End routine if max trial duration reached
        if currentTime >= maxTime:
            continueRoutine = False

        # Optional: exit experiment
        if 'escape' in event.getKeys():
            core.quit()
  Routine Central_Fixation
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    MovieComponent central_fixation
      backend = ffpyplayer
      forceEndRoutine = False
      movie = material/ag_original.mp4
      size = (0.7,0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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  Routine Test_Period
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    PolygonComponent ROI_right
      anchor = center-right
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(-1.0000, 1.0000, -0.0039)
      pos = (0.6, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent ROI_left
      anchor = center-left
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(1.0000, -1.0000, 1.0000)
      pos = (-0.6, 0)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent imgLeft
      anchor = center-left
      pos = (-0.6, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    ImageComponent imgRight
      anchor = center-right
      pos = (0.6, 0)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    CodeComponent code_test
      Code Type = Auto->JS
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      Begin Routine:
        if testLoop.thisN == 0:
            imgLeft.image = image_left
            imgRight.image = image_right
        else:
            imgLeft.image = image_right
            imgRight.image = image_left

        # Timer for this trial
        trialClock = core.Clock()  # overall max display time
        roiClockLeft = core.Clock()    # timer for fixation in ROI
        roiClockRight = core.Clock()

        # Gaze tracking
        sampleIndex = 0

        gazeTimeLeft = 0
        inROILeft = 0
        gazeInROILeft = False

        gazeTimeRight = 0
        inROIRight = 0
        gazeInROIRight = False

        # Define ROI Left
        x0, y0 = ROI_left.pos[0] - ROI_left.size[0]/2, ROI_left.pos[1] - ROI_left.size[1]/2
        x1, y1 = ROI_left.pos[0] + ROI_left.size[0]/2, ROI_left.pos[1] + ROI_left.size[1]/2

        # Define ROI Right
        x2, y2 = ROI_right.pos[0] - ROI_right.size[0]/2, ROI_right.pos[1] - ROI_right.size[1]/2
        x3, y3 = ROI_right.pos[0] + ROI_right.size[0]/2, ROI_right.pos[1] + ROI_right.size[1]/2

        maxTime = 5

        print('Test started')
      Each Frame:
        # ---------- ROI TIME ACCUMULATION ----------
        #if roi_familiarization.status == STARTED:

        # Current time
        currentTime = trialClock.getTime()
        # Get current gaze position
        gazePos = get_current_gaze()  # (x, y) or None

        if gazePos is not None:
            gazeX, gazeY = gazePos

            # Left ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROILeft = 1
                if not gazeInROILeft:
                    roiClockLeft.reset()
                    gazeInROILeft = True
                gazeTimeLeft = roiClockLeft.getTime()
            else:
                inROILeft = 0
                if gazeInROILeft:
                    gazeTimeLeft += roiClockLeft.getTime()
                    gazeInROILeft = False

            # Right ROI
            if x2 <= gazeX <= x3 and y2 <= gazeY <= y3:
                inROIRight = 1
                if not gazeInROIRight:
                    roiClockRight.reset()
                    gazeInROIRight = True
                gazeTimeRight = roiClockRight.getTime()
            else:
                inROIRight = 0
                if gazeInROIRight:
                    gazeTimeRight += roiClockRight.getTime()
                    gazeInROIRight = False

        # ---------- SAVE RAW GAZE SAMPLE ----------
        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('trial_time', currentTime)
        thisExp.addData('gaze_x', gazeX)
        thisExp.addData('gaze_y', gazeY)
        thisExp.addData('gaze_in_roi_left', inROILeft)
        thisExp.addData('gaze_time_in_roi_left', gazeTimeLeft)
        thisExp.addData('gaze_in_roi_right', inROIRight)
        thisExp.addData('gaze_time_in_roi_right', gazeTimeRight)

        thisExp.nextEntry()  # VERY IMPORTANT

        if currentTime >= maxTime:
            continueRoutine = False

        # Optional: exit experiment
        if 'escape' in event.getKeys():
            core.quit()
  Routine Pause_
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    ImageComponent black_square
      image = material/black_square.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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  Routine Start_ET
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    ImageComponent image_test
      image = material/Screenshot 2024-10-10 120933.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent Tobii_SDK_connect
      Code Type = Auto->JS
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      Before Experiment:
        import tobii_research as tr
        from psychopy import visual

        #get screen size in pix
        win = visual.Window(fullscr=True)
        #win_width, win_height = win.size
        #print(win_width, win_height)

        found_eyetrackers = tr.find_all_eyetrackers()
        if not found_eyetrackers:
            raise RuntimeError("No Tobii eye trackers found!")

        my_eyetracker = found_eyetrackers[0]
        print(f"Using eye tracker: {my_eyetracker}")

        gaze_data = []

        # global dictionary to hold the latest gaze
        latest_gaze = {'left_x': None, 'left_y': None, 'right_x': None, 'right_y': None}

        def gaze_callback(gaze_sample):
            # update latest gaze
            latest_gaze['left_x'] = gaze_sample['left_gaze_point_on_display_area'][0]
            latest_gaze['left_y'] = gaze_sample['left_gaze_point_on_display_area'][1]
            latest_gaze['right_x'] = gaze_sample['right_gaze_point_on_display_area'][0]
            latest_gaze['right_y'] = gaze_sample['right_gaze_point_on_display_area'][1]

            # optionally still log all samples
            timestamp = time.time()
            gaze_data.append({
                'timestamp': timestamp,
                'left_x': latest_gaze['left_x'],
                'left_y': latest_gaze['left_y'],
                'right_x': latest_gaze['right_x'],
                'right_y': latest_gaze['right_y']
            })

        def get_current_gaze():
            """
            Returns the current gaze position as a tuple (x, y),
            averaged between left and right eyes if both are available.
            Falls back to a single eye if the other is missing.
            Returns None if no gaze data is available.
            """
            left_x = latest_gaze['left_x']
            left_y = latest_gaze['left_y']
            right_x = latest_gaze['right_x']
            right_y = latest_gaze['right_y']

            if left_x is not None and right_x is not None:
                # midpoint between eyes
                # Org. Tobii coordinates
                #gaze_x = (left_x + right_x) / 2
                #gaze_y = (left_y + right_y) / 2
                #Screen in pix conversion
                #gaze_x = (left_x + ((right_x - left_x) / 2)) * win_width
                #gaze_y = (left_y + ((right_y - left_y) / 2)) * win_height
                #Convert to "norm" units of PsychoPy
                #gaze_x = ((left_x + right_x) / 2) * 2 - 1
                #gaze_y = 1 - ((left_y + right_y) / 2) * 2
                #Convert to 'height' units of PyschoPy
                aspect = win.size[0] / win.size[1]
                gaze_x = (((left_x + right_x) / 2) - 0.5) * aspect
                gaze_y = 0.5 - ((left_y + right_y) / 2)
                return (gaze_x, gaze_y)
            elif left_x is not None:
                return (left_x, left_y)
            elif right_x is not None:
                return (right_x, right_y)
            else:
                return None
      Begin Experiment:
        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_callback, as_dictionary=True)
        print('ET started')
  Routine Stop_ET
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    ImageComponent image
      image = material/Screenshot 2024-10-10 120727.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent Tobii_SDK_disconnect
      Code Type = Auto->JS
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      End Experiment:
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_callback)
        print('ET stopped')
Flow
  Routine Start_ET
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = preferential looking paradigm.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_fam': 'fractals/fractal_complex_pair1_a_bright.png', 'image_left': 'fractals/fractal_complex_pair1_a_bright.png', 'image_right': 'fractals/fractal_complex_pair1_b_bright.png', 'fam_IC_time': 5, 'fam_max_time': 10},
      {'image_fam': 'fractals/fractal_simple_pair1_a_bright.png', 'image_left': 'fractals/fractal_simple_pair1_b_bright.png', 'image_right': 'fractals/fractal_simple_pair1_a_bright.png', 'fam_IC_time': 10, 'fam_max_time': 20},
      {'image_fam': 'fractals/fractal_complex_pair2_a_bright.png', 'image_left': 'fractals/fractal_complex_pair2_a_bright.png', 'image_right': 'fractals/fractal_complex_pair2_b_bright.png', 'fam_IC_time': 15, 'fam_max_time': 30},
      {'image_fam': 'fractals/fractal_simple_pair2_a_bright.png', 'image_left': 'fractals/fractal_simple_pair2_b_bright.png', 'image_right': 'fractals/fractal_simple_pair2_a_bright.png', 'fam_IC_time': 5, 'fam_max_time': 10},
      {'image_fam': 'fractals/fractal_complex_pair3_a_bright.png', 'image_left': 'fractals/fractal_complex_pair3_a_bright.png', 'image_right': 'fractals/fractal_complex_pair3_b_bright.png', 'fam_IC_time': 10, 'fam_max_time': 20},
      {'image_fam': 'fractals/fractal_simple_pair3_a_bright.png', 'image_left': 'fractals/fractal_simple_pair3_b_bright.png', 'image_right': 'fractals/fractal_simple_pair3_a_bright.png', 'fam_IC_time': 15, 'fam_max_time': 30},
      {'image_fam': 'fribbles/Arrow_Complex.png', 'image_left': 'fribbles/Arrow_Complex.png', 'image_right': 'fribbles/Bowl_Complex.png', 'fam_IC_time': 5, 'fam_max_time': 10}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
    Routine Laughing_Baby
    Routine Familiarization
    LoopInitiator testLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine Central_Fixation
      Routine Test_Period
    LoopTerminator testLoop
  LoopTerminator trialLoop
  Routine Stop_ET
