PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = pygame
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'order_number': '644'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(0.0000, 0.0000, 0.0000)
  consoleLoggingLevel = data
  expName = Test
  keyboardBackend = ioHub
  logging level = data
  runMode = 1
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Routines
  Routine Calibration
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    CodeComponent run_calibration
      Code Type = Py
      Begin Routine:
        # positioning screen + infant calibration (tobii_calibration.py)
        from tobii_calibration import run_infant_calibration
        calib_ok = run_infant_calibration(win)
        thisExp.addData('calibration_success', calib_ok)
        continueRoutine = False
  Routine Laughing_Baby
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    MovieComponent baby_video
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = materials/baby_video_grey.mp4
      size = (1.8,1)
      startVal [time (s)] = None
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    CodeComponent code_attention_check
      Code Type = Auto->JS
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      Begin Routine:
        # ---------- BEGIN ROUTINE ----------
        trialClock = core.Clock()
        roiClock = core.Clock()
        videoStarted = False
        videoStartTime = None
        gazeTime = 0
        gazeInROI = False
        continueRoutine = True
        sampleIndex = 0
        # Load Video Stim
        baby_video.setAutoDraw(False)
        baby_video.stop()
        baby_video.seek(0)
        # Reset Audio Stim
        baby_sound = sound.Sound(r'materials\\baby_sound.wav')
        baby_sound.setVolume(1.0)
        soundPlayed = False

        # Get aspect ratio
        aspect = win.size[0] / win.size[1]

        # Define ROI
        x0 = -aspect / 2
        x1 =  aspect / 2
        y0 = -0.5
        y1 =  0.5

        print('Attention check started')
      Each Frame:
        # Get current time
        currentTime = trialClock.getTime()
        # Get current gaze
        gazePos = get_current_gaze()

        if gazePos is not None:
            gazeX, gazeY = gazePos
            # Check if gaze is anywhere on the screen ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                if not videoStarted:
                    baby_video.setAutoDraw(True)
                    baby_video.play()
                    videoStarted = True
                    videoStartTime = t
                    if not soundPlayed:
                        baby_sound.play()
                        soundPlayed = True
        else:
            gazeX, gazeY = None, None

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('gaze_time', currentTime)
        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None
        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        # End routine after 3 seconds
        if videoStarted and videoStartTime is not None:
            if t - videoStartTime >= 3.0:
                continueRoutine = False

        # Optional: allow escape key to quit experiment
        if 'escape' in event.getKeys():
            core.quit()
      End Routine:
        baby_video.stop()
        baby_sound.stop()
        baby_video.seek(0)
        baby_video.setAutoDraw(False)
  Routine Familiarization
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    PolygonComponent ROI_Familiarization
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = rectangle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    ImageComponent imgFam
      image [set every repeat] = $familiar_stimulus_path
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    CodeComponent code_familiarization
      Code Type = Auto->JS
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      Begin Routine:
        # Timer for this trial
        trialClock = core.Clock()  # overall max display time
        roiClock = core.Clock()    # timer for fixation in ROI

        # Gaze tracking
        gazeTime = 0  # will store the gaze time inside ROI
        sampleIndex = 0
        inROI = 0
        gazeInROI = False

        fam_sound = sound.Sound(r'materials\\familiarization_sound.wav')
        fam_sound.setVolume(1.0)
        #print("Duration:", Fam.getDuration())
        fam_sound.play()

        # Define ROI
        x0, y0 = ROI_Familiarization.pos[0] - ROI_Familiarization.size[0]/2, ROI_Familiarization.pos[1] - ROI_Familiarization.size[1]/2
        x1, y1 = ROI_Familiarization.pos[0] + ROI_Familiarization.size[0]/2, ROI_Familiarization.pos[1] + ROI_Familiarization.size[1]/2

        # Read times from Excel
        minTime = float(familiarization_time)   # time required in ROI to end routine
        maxTime = float(familiarization_time_timeout)  # maximum trial duration

        print('Fam started')
      Each Frame:
        # Get current time
        currentTime = trialClock.getTime()
        # Get current gaze position from latest_gaze
        gazePos = get_current_gaze()  # returns (x, y) or None

        if gazePos is not None:
            gazeX, gazeY = gazePos

            # Check if gaze is inside ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROI = 1
                if not gazeInROI:       # first frame in ROI
                    roiClock.reset()
                    gazeInROI = True
                gazeTime = roiClock.getTime()  # update gazeTime continuously while in ROI
            else:
                if gazeInROI:           # gaze just left ROI
                    gazeTime += roiClock.getTime()  # finalize accumulated time
                    gazeInROI = False

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('gaze_time', currentTime)

        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        # Save processed values safely
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi', inROI if 'inROI' in locals() else 0)
        thisExp.addData('gaze_time_in_roi', gazeTime if 'gazeTime' in locals() else 0)

        thisExp.nextEntry()  # VERY IMPORTANT

        # ---------- END CONDITIONS ----------

        if gazeTime >= minTime:
            continueRoutine = False

        if currentTime >= maxTime:
            continueRoutine = False

        if 'escape' in event.getKeys():
            core.quit()
      End Routine:
        fam_sound.stop()
  Routine Central_Fixation
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    MovieComponent central_fixation
      backend = ffpyplayer
      forceEndRoutine = False
      movie [set every repeat] = materials/attention_video_grey.mp4
      size = (0.7,0.4)
      startVal [time (s)] = None
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    CodeComponent code_check_fixation
      Code Type = Auto->JS
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      Begin Routine:
        trialClock = core.Clock()
        roiClock = core.Clock()
        videoStarted = False
        videoStartTime = None
        gazeTime = 0
        gazeInROI = False
        continueRoutine = True
        sampleIndex = 0
        # Get video stim
        central_fixation.setAutoDraw(False)
        central_fixation.stop()
        central_fixation.seek(0)
        # play sound
        attention_sound = sound.Sound(r'materials\\attention_sound.wav')
        attention_sound.setVolume(1.0)
        soundPlayed = False
        # Get aspect ratio
        aspect = win.size[0] / win.size[1]

        # Define ROI
        x0 = -aspect / 2
        x1 =  aspect / 2
        y0 = -0.5
        y1 =  0.5

        print('Attention check started')
      Each Frame:
        # Get current time
        currentTime = trialClock.getTime()

        # Get current gaze
        gazePos = get_current_gaze()  # returns (x, y) in 'height' units

        if gazePos is not None:
            gazeX, gazeY = gazePos
            # Check if gaze is anywhere on the screen ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                if not videoStarted:
                    # Start the movie immediately
                    central_fixation.setAutoDraw(True)
                    central_fixation.play()
                    videoStarted = True
                    videoStartTime = t
                    if not soundPlayed:
                        attention_sound.play()
                        soundPlayed = True

        else:
            gazeX, gazeY = None, None

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('gaze_time', currentTime)

        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        # End routine after 3 seconds
        if videoStarted and videoStartTime is not None:
            if t - videoStartTime >= 3.0:  # 3 seconds after video started
                continueRoutine = False

        # Optional: allow escape key to quit experiment
        if 'escape' in event.getKeys():
            core.quit()
      End Routine:
        central_fixation.stop()
        attention_sound.stop()
        central_fixation.seek(0)
        central_fixation.setAutoDraw(False)
  Routine Test_Period
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    PolygonComponent ROI_right
      anchor = center-right
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (0.8, 0)
      shape = rectangle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    PolygonComponent ROI_left
      anchor = center-left
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (-0.8, 0)
      shape = rectangle
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    ImageComponent imgLeft
      anchor = center-left
      pos = (-0.8, 0)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    ImageComponent imgRight
      anchor = center-right
      pos = (0.8, 0)
      size = (0.75, 0.75)
      startVal [time (s)] = 0.0
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    CodeComponent code_test
      Code Type = Auto->JS
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      Begin Routine:
        # set up test imaga rotation
        if testLoop.thisN == 0:
            imgLeft.image = left_image_path_1
            imgRight.image = right_image_path_1
        else:
            imgLeft.image = right_image_path_1
            imgRight.image = left_image_path_1

        # Timer for this trial
        trialClock = core.Clock()  # overall max display tim2e
        roiClockLeft = core.Clock()    # timer for fixation in ROI
        roiClockRight = core.Clock()

        # Gaze tracking
        sampleIndex = 0

        gazeTimeLeft = 0
        inROILeft = 0
        gazeInROILeft = False

        gazeTimeRight = 0
        inROIRight = 0
        gazeInROIRight = False

        # Define ROI Left
        x0, y0 = ROI_left.pos[0] - ROI_left.size[0]/2, ROI_left.pos[1] - ROI_left.size[1]/2
        x1, y1 = ROI_left.pos[0] + ROI_left.size[0]/2, ROI_left.pos[1] + ROI_left.size[1]/2

        # Define ROI Right
        x2, y2 = ROI_right.pos[0] - ROI_right.size[0]/2, ROI_right.pos[1] - ROI_right.size[1]/2
        x3, y3 = ROI_right.pos[0] + ROI_right.size[0]/2, ROI_right.pos[1] + ROI_right.size[1]/2

        maxTime = 5

        print('Test started')
      Each Frame:
        # Current time
        currentTime = trialClock.getTime()
        # Get current gaze position
        gazePos = get_current_gaze()  # (x, y) or None

        if gazePos is not None:
            gazeX, gazeY = gazePos

            # Left ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROILeft = 1
                if not gazeInROILeft:
                    roiClockLeft.reset()
                    gazeInROILeft = True
                gazeTimeLeft = roiClockLeft.getTime()
            else:
                inROILeft = 0
                if gazeInROILeft:
                    gazeTimeLeft += roiClockLeft.getTime()
                    gazeInROILeft = False

            # Right ROI
            if x2 <= gazeX <= x3 and y2 <= gazeY <= y3:
                inROIRight = 1
                if not gazeInROIRight:
                    roiClockRight.reset()
                    gazeInROIRight = True
                gazeTimeRight = roiClockRight.getTime()
            else:
                inROIRight = 0
                if gazeInROIRight:
                    gazeTimeRight += roiClockRight.getTime()
                    gazeInROIRight = False

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('gaze_time', currentTime)

        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        # Save processed values safely
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi_right', inROIRight if 'inROIright' in locals() else 0)
        thisExp.addData('gaze_time_in_roi_right', gazeTimeRight if 'gazeTimeRight' in locals() else 0)
        thisExp.addData('gaze_in_roi_left', inROILeft if 'inROIleft' in locals() else 0)
        thisExp.addData('gaze_time_in_roi_left', gazeTimeLeft if 'gazeTimeLeft' in locals() else 0)

        thisExp.nextEntry()  # VERY IMPORTANT

        if currentTime >= maxTime:
            continueRoutine = False

        # Optional: exit experiment
        if 'escape' in event.getKeys():
            core.quit()
  Routine Start_ET
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    ImageComponent start_image
      image = materials/MB5_logo.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
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    CodeComponent Tobii_SDK_connect
      Code Type = Auto->JS
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      Before Experiment:
        import tobii_research as tr
        from psychopy import visual
        from psychopy import sound, core
        import time


        ## Create a 440 Hz test tone, 2 seconds long
        #test = sound.Sound(value=440, secs=2.0)  # no device argument
        #test.setVolume(1.0)
        ## Play the sound
        #test.play()
        ## Wait for the sound to finish
        #core.wait(test.getDuration())
      Begin Experiment:
        #set runtime variables
        #trial order file name
        print(expInfo)
        trial_file = "trials/order_"+str(int(expInfo['order_number']))+".csv"


        found_eyetrackers = tr.find_all_eyetrackers()
        if not found_eyetrackers:
            raise RuntimeError("No Tobii eye trackers found!")

        my_eyetracker = found_eyetrackers[0]
        print(f"Using eye tracker: {my_eyetracker}")

        latest_gaze = {}

        def gaze_callback(gaze_sample):
            latest_gaze.clear()
            latest_gaze.update(gaze_sample.copy())

        def get_current_gaze():

            if not latest_gaze:
                return None

            left = latest_gaze.get('left_gaze_point_on_display_area')
            right = latest_gaze.get('right_gaze_point_on_display_area')

            left_valid = latest_gaze.get('left_gaze_point_validity') == 1
            right_valid = latest_gaze.get('right_gaze_point_validity') == 1

            left_x = left[0] if left and left_valid else None
            left_y = left[1] if left and left_valid else None
            right_x = right[0] if right and right_valid else None
            right_y = right[1] if right and right_valid else None

            if left_x is not None and right_x is not None:
                aspect = win.size[0] / win.size[1]
                gaze_x = (((left_x + right_x) / 2) - 0.5) * aspect
                gaze_y = 0.5 - ((left_y + right_y) / 2)
                return (gaze_x, gaze_y)

            elif left_x is not None:
                aspect = win.size[0] / win.size[1]
                gaze_x = (left_x - 0.5) * aspect
                gaze_y = 0.5 - left_y
                return (gaze_x, gaze_y)

            elif right_x is not None:
                aspect = win.size[0] / win.size[1]
                gaze_x = (right_x - 0.5) * aspect
                gaze_y = 0.5 - right_y
                return (gaze_x, gaze_y)

            else:
                return None

        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_callback, as_dictionary=True)
        print('ET started')
  Routine Stop_ET
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    ImageComponent image
      image = materials/MB5_logo.png
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent Tobii_SDK_disconnect
      Code Type = Auto->JS
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      End Experiment:
        # Stop eye tracker recording
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_callback)
        print('ET stopped')
  Routine Exp_Start_Screen
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    ImageComponent starter_image
      image = materials/bunnies.png
      size = (2, 2)
      startVal [time (s)] = 0.0
      units = norm
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    KeyboardComponent start_exp_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Calibration
  Routine Start_ET
  Routine Exp_Start_Screen
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = $trial_file
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_fam': 'fractals/fractal_complex_pair1_a_bright.png', 'image_left': 'fractals/fractal_complex_pair1_a_bright.png', 'image_right': 'fractals/fractal_complex_pair1_b_bright.png', 'fam_IC_time': 5, 'fam_max_time': 10},
      {'image_fam': 'fractals/fractal_simple_pair1_a_bright.png', 'image_left': 'fractals/fractal_simple_pair1_b_bright.png', 'image_right': 'fractals/fractal_simple_pair1_a_bright.png', 'fam_IC_time': 10, 'fam_max_time': 20},
      {'image_fam': 'fractals/fractal_complex_pair2_a_bright.png', 'image_left': 'fractals/fractal_complex_pair2_a_bright.png', 'image_right': 'fractals/fractal_complex_pair2_b_bright.png', 'fam_IC_time': 15, 'fam_max_time': 30},
      {'image_fam': 'fractals/fractal_simple_pair2_a_bright.png', 'image_left': 'fractals/fractal_simple_pair2_b_bright.png', 'image_right': 'fractals/fractal_simple_pair2_a_bright.png', 'fam_IC_time': 5, 'fam_max_time': 10},
      {'image_fam': 'fractals/fractal_complex_pair3_a_bright.png', 'image_left': 'fractals/fractal_complex_pair3_a_bright.png', 'image_right': 'fractals/fractal_complex_pair3_b_bright.png', 'fam_IC_time': 10, 'fam_max_time': 20},
      {'image_fam': 'fractals/fractal_simple_pair3_a_bright.png', 'image_left': 'fractals/fractal_simple_pair3_b_bright.png', 'image_right': 'fractals/fractal_simple_pair3_a_bright.png', 'fam_IC_time': 15, 'fam_max_time': 30},
      {'image_fam': 'fribbles/Arrow_Complex.png', 'image_left': 'fribbles/Arrow_Complex.png', 'image_right': 'fribbles/Bowl_Complex.png', 'fam_IC_time': 5, 'fam_max_time': 10}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
    Routine Laughing_Baby
    Routine Familiarization
    LoopInitiator testLoop loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = 2
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      Routine Central_Fixation
      Routine Test_Period
    LoopTerminator testLoop
  LoopTerminator trialLoop
  Routine Stop_ET
