PsychoPy2experiment version="2026.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'order_number': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $(0.0000, 0.0000, 0.0000)
  consoleLoggingLevel = data
  expName = ManyBabies5
  keyboardBackend = ioHub
  logging level = data
  measureFrameRate = False
  runMode = 1
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Routines
  Routine Calibration
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    CodeComponent run_calibration
      Code Type = Py
      Begin Routine:
        # positioning screen + infant calibration (tobii_calibration.py)
        from tobii_calibration import run_infant_calibration
        calib_ok = run_infant_calibration(win)
        thisExp.addData('calibration_success', calib_ok)
      Each Frame:
        continueRoutine = False
  Routine Laughing_Baby
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    MovieComponent baby_video
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = stimuli/movies/laughing_baby_alternate_grey_no_audio.mp4
      size = (None, 1)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 9.9
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    CodeComponent code_laughing_baby
      Code Type = Auto->JS
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      Begin Routine:
        # ---------- BEGIN ROUTINE ----------
        trialClock = core.Clock()
        roiClock = core.Clock()
        trialTime = 0
        gazeInROI = False
        continueRoutine = True
        sampleIndex = 0

        # Get aspect ratio
        aspect = win.size[0] / win.size[1]

        # Define ROI
        x0 = -aspect / 2
        x1 =  aspect / 2
        y0 = -0.5
        y1 =  0.5

        # set up pause function
        showPause = False
        restartVideo = False

        print('Laughing Baby Started')
      Each Frame:
        # Get current time
        currentTime = trialClock.getTime()
        # Get current gaze
        gazePos = get_current_gaze()

        if gazePos is not None:
            gazeX, gazeY = gazePos
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                # Entering ROI
                if not gazeInROI:
                    roiClock.reset()
                    gazeInROI = True
                # current accumulated gaze time
                currentGazeTime = trialTime + roiClock.getTime()
            else:
                # Leaving ROI
                if gazeInROI:
                    trialTime += roiClock.getTime()
                    gazeInROI = False
                currentGazeTime = trialTime
        else:
            gazeX, gazeY = None, None
            currentGazeTime = trialTime

        # ---------- SAVE RAW GAZE SAMPLE ----------
        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('trial_time', currentTime)
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi', inROI if 'inROI' in locals() else 0)
        thisExp.addData('gaze_time_ROI_baby_video', currentGazeTime)

        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        # Pause function - experimenter controlled
        keys = event.getKeys()

        if 'p' in keys:
            showPause = True
            continueRoutine = False
    KeyboardComponent key_resp_continue_baby_video
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    SoundComponent baby_sound
      forceEndRoutine = False
      sound [set every repeat] = stimuli/audio/laughing_baby.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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    ImageComponent first_frame_baby_set_up
      image = stimuli/images/laughing_baby_alternate_grey_frame10.png
      size = (1.3333, 0.75)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Familiarization
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    PolygonComponent ROI_Familiarization
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent imgFam
      image [set every repeat] = $familiar_stimulus_path
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    CodeComponent code_familiarization
      Code Type = Auto->JS
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      Begin Routine:
        # Timer for this trial
        trialClock = core.Clock()  # overall max display time
        roiClock = core.Clock()    # timer for fixation in ROI

        # Gaze tracking
        gazeTime = 0  # will store the gaze time inside ROI
        sampleIndex = 0
        inROI = 0
        gazeInROI = False

        # Define ROI
        x0, y0 = ROI_Familiarization.pos[0] - ROI_Familiarization.size[0]/2, ROI_Familiarization.pos[1] - ROI_Familiarization.size[1]/2
        x1, y1 = ROI_Familiarization.pos[0] + ROI_Familiarization.size[0]/2, ROI_Familiarization.pos[1] + ROI_Familiarization.size[1]/2

        # Read times from Excel
        minTime = float(familiarization_time)   # time required in ROI to end routine
        maxTime = float(familiarization_time_timeout)  # maximum trial duration

        print('Fam started')
      Each Frame:
        # Get current time
        currentTime = trialClock.getTime()
        # Get current gaze position from latest_gaze
        gazePos = get_current_gaze()  # returns (x, y) or None

        if gazePos is not None:
            gazeX, gazeY = gazePos
            # Check if gaze is inside ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROI = 1
                if not gazeInROI:       # first frame in ROI
                    roiClock.reset()
                    gazeInROI = True
            else:
                if gazeInROI:           # gaze just left ROI
                    gazeTime += roiClock.getTime()  # finalize accumulated time
                    gazeInROI = False

        # If currently looking, report accumulated + current fixation
        if gazeInROI:
            currentGazeTime = gazeTime + roiClock.getTime()
        else:
            currentGazeTime = gazeTime

        # for debugging
        # print(currentGazeTime)

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('trial_time', currentTime)
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi_familiarization', inROI if 'inROI' in locals() else 0)
        thisExp.addData('gaze_time_ROI_familiarization', currentGazeTime if 'gazeTime' in locals() else 0)

        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        thisExp.nextEntry()  # VERY IMPORTANT

        # ---------- END CONDITIONS ----------

        if currentGazeTime >= minTime:
            print('Passed min familiarization time.')
            continueRoutine = False

        if currentTime >= maxTime:
            print('Did not pass min familiarization time.')
            continueRoutine = False
    SoundComponent sound_fam
      forceEndRoutine = False
      sound [set every repeat] = stimuli/audio/amelie_rediscovery_ag.wav
      startVal [time (s)] = 0.0
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  Routine Start_ET
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    ImageComponent start_image
      image = stimuli/images/bunnies.png
      size = (None, 1)
      startVal [time (s)] = 0.0
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    CodeComponent Tobii_SDK_connect
      Code Type = Auto->JS
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      Before Experiment:
        import tobii_research as tr
        from psychopy import visual
        from psychopy import sound, core
        import time


        ## Create a 440 Hz test tone, 2 seconds long
        #test = sound.Sound(value=440, secs=2.0)  # no device argument
        #test.setVolume(1.0)
        ## Play the sound
        #test.play()
        ## Wait for the sound to finish
        #core.wait(test.getDuration())
      Begin Experiment:
        #set runtime variables
        found_eyetrackers = tr.find_all_eyetrackers()
        if not found_eyetrackers:
            raise RuntimeError("No Tobii eye trackers found!")

        my_eyetracker = found_eyetrackers[0]
        print(f"Using eye tracker: {my_eyetracker}")

        latest_gaze = {}

        def gaze_callback(gaze_sample):
            latest_gaze.clear()
            latest_gaze.update(gaze_sample.copy())

        def get_current_gaze():

            if not latest_gaze:
                return None

            left = latest_gaze.get('left_gaze_point_on_display_area')
            right = latest_gaze.get('right_gaze_point_on_display_area')

            left_valid = latest_gaze.get('left_gaze_point_validity') == 1
            right_valid = latest_gaze.get('right_gaze_point_validity') == 1

            left_x = left[0] if left and left_valid else None
            left_y = left[1] if left and left_valid else None
            right_x = right[0] if right and right_valid else None
            right_y = right[1] if right and right_valid else None

            if left_x is not None and right_x is not None:
                aspect = win.size[0] / win.size[1]
                gaze_x = (((left_x + right_x) / 2) - 0.5) * aspect
                gaze_y = 0.5 - ((left_y + right_y) / 2)
                return (gaze_x, gaze_y)

            elif left_x is not None:
                aspect = win.size[0] / win.size[1]
                gaze_x = (left_x - 0.5) * aspect
                gaze_y = 0.5 - left_y
                return (gaze_x, gaze_y)

            elif right_x is not None:
                aspect = win.size[0] / win.size[1]
                gaze_x = (right_x - 0.5) * aspect
                gaze_y = 0.5 - right_y
                return (gaze_x, gaze_y)

            else:
                return None

        my_eyetracker.subscribe_to(tr.EYETRACKER_GAZE_DATA, gaze_callback, as_dictionary=True)
        print('ET started')
    KeyboardComponent key_resp_start
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stop_ET
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    ImageComponent image
      image = stimuli/images/bunnies.png
      size = (None, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent Tobii_SDK_disconnect
      Code Type = Auto->JS
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      End Experiment:
        # Stop eye tracker recording
        my_eyetracker.unsubscribe_from(tr.EYETRACKER_GAZE_DATA, gaze_callback)
        print('ET stopped DONE')
  Routine Pause_Image
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    CodeComponent check_infant_ready
      Code Type = Auto->JS
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      Begin Routine:
        if not showPause:
            continueRoutine = False
      End Routine:
        if 's' in start_again_key.keys:
            restartVideo = True
        else:
            restartVideo = False

        if restartVideo:
            pause_loop.finished = False
        else:
            pause_loop.finished = True
    ImageComponent pause_image_set
      image = stimuli/images/bunnies.png
      size = (None, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent start_again_key
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Pre_Test_Attention_Getter
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    MovieComponent central_fixation
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = stimuli/movies/ag_no_audio_grey.mp4
      size = (0.7,0.4)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 5
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    CodeComponent code_ag_1
      Code Type = Auto->JS
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      Begin Routine:
        # set up
        trialClock = core.Clock()
        roiClock = core.Clock()

        gazeTime = 0
        gazeInROI = False
        continueRoutine = True
        sampleIndex = 0

        # Get aspect ratio
        aspect = win.size[0] / win.size[1]

        # Define ROI
        x0 = -aspect / 2
        x1 =  aspect / 2
        y0 = -0.5
        y1 =  0.5

        # set gaze contingent advance
        minTime = 0.5   # time required in ROI to end routine

        print('AG 1 started')
      Each Frame:
        # Get current time
        currentTime = trialClock.getTime()
        # Get current gaze
        gazePos = get_current_gaze()  # returns (x, y) in 'height' units

        if gazePos is not None:
            gazeX, gazeY = gazePos
            # Check if gaze is inside ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROI = 1
                if not gazeInROI:       # first frame in ROI
                    roiClock.reset()
                    gazeInROI = True
            else:
                if gazeInROI:           # gaze just left ROI
                    gazeTime += roiClock.getTime()  # finalize accumulated time
                    gazeInROI = False

        # If currently looking, report accumulated + current fixation
        if gazeInROI:
            currentGazeTime = gazeTime + roiClock.getTime()
        else:
            currentGazeTime = gazeTime

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('trial_time', currentTime)
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi_ag_1', inROI if 'inROI' in locals() else 0)
        thisExp.addData('gaze_time_ROI_ag_1', currentGazeTime)
        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        # ---------- END CONDITION ----------

        if currentGazeTime >= minTime:
            print('Passed min attention time.')
            continueRoutine = False
    SoundComponent sound_1
      forceEndRoutine = False
      sound [set every repeat] = stimuli/audio/ag.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    ImageComponent first_frame_ag_1
      image = stimuli/images/first_frame_attention.png
      size = (0.7,0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    KeyboardComponent key_resp_continue_pre_test_ag
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test_Event_1
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    PolygonComponent ROI_right_1
      anchor = center-right
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (0.8, 0)
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    PolygonComponent ROI_left_1
      anchor = center-left
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (-0.8, 0)
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent imgLeft_1
      anchor = center-left
      image [set every repeat] = $left_image_path_1
      pos = (-0.8, 0)
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent imgRight_1
      anchor = center-right
      image [set every repeat] = $right_image_path_1
      pos = (0.8, 0)
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    CodeComponent code_test_1
      Code Type = Auto->JS
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      Begin Routine:
        # Timer for this trial
        trialClock = core.Clock()
        roiClockLeft = core.Clock()
        roiClockRight = core.Clock()

        # Gaze tracking
        sampleIndex = 0
        gazeX = float('nan')
        gazeY = float('nan')

        gazeTimeLeft = 0
        currentGazeTimeLeft = gazeTimeLeft
        inROILeft = 0
        gazeInROILeft = False

        gazeTimeRight = 0
        currentGazeTimeRight = gazeTimeRight
        inROIRight = 0
        gazeInROIRight = False

        gazeX = float('nan')
        gazeY = float('nan')

        # ROI_left uses anchor='center-left' (pos is midpoint of left edge)
        left_w, left_h = ROI_left_1.size
        x0 = ROI_left_1.pos[0]                  # left edge
        x1 = ROI_left_1.pos[0] + left_w         # right edge
        y0 = ROI_left_1.pos[1] - left_h / 2
        y1 = ROI_left_1.pos[1] + left_h / 2

        # ROI_right uses anchor='center-right' (pos is midpoint of right edge)
        right_w, right_h = ROI_right_1.size
        x2 = ROI_right_1.pos[0] - right_w       # left edge
        x3 = ROI_right_1.pos[0]                 # right edge
        y2 = ROI_right_1.pos[1] - right_h / 2
        y3 = ROI_right_1.pos[1] + right_h / 2

        # set test time
        maxTime = 5

        print('Test 1 started')
      Each Frame:
        # Current time
        currentTime = trialClock.getTime()
        # Get current gaze position
        gazePos = get_current_gaze()  # (x, y) or None

        if gazePos is not None:
            gazeX, gazeY = gazePos
            # Left ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROILeft = 1
                if not gazeInROILeft:
                    roiClockLeft.reset()
                    gazeInROILeft = True
            else:
                inROILeft = 0
                if gazeInROILeft:
                    gazeTimeLeft += roiClockLeft.getTime()
                    gazeInROILeft = False
            # If currently looking, report accumulated + current fixation
            if inROILeft:
                currentGazeTimeLeft = gazeTimeLeft + roiClockLeft.getTime()
            else:
                currentGazeTimeLeft = gazeTimeLeft
            # for debugging
            # print(f"Left: {currentGazeTimeLeft}")

            # Right ROI
            if x2 <= gazeX <= x3 and y2 <= gazeY <= y3:
                inROIRight = 1
                if not gazeInROIRight:
                    roiClockRight.reset()
                    gazeInROIRight = True
            else:
                inROIRight = 0
                if gazeInROIRight:
                    gazeTimeRight += roiClockRight.getTime()
                    gazeInROIRight = False
                # If currently looking, report accumulated + current fixation
            if inROIRight:
                currentGazeTimeRight = gazeTimeRight + roiClockRight.getTime()
            else:
                currentGazeTimeRight = gazeTimeRight
            # for debugging
            # print(f"Right: {currentGazeTimeRight}")

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('trial_time', currentTime)
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi_right_test_1', inROIRight)
        thisExp.addData('gaze_time_in_roi_right_test_1', currentGazeTimeRight)
        thisExp.addData('gaze_in_roi_left_test_1', inROILeft)
        thisExp.addData('gaze_time_in_roi_left_test_1', currentGazeTimeLeft)

        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        thisExp.nextEntry()  # VERY IMPORTANT

        # time out for test phase
        if currentTime >= maxTime:
            continueRoutine = False
  Routine Mid_Test_Attention_Getter
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    MovieComponent attention_getter_2
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = stimuli/movies/ag_no_audio_grey.mp4
      size = (0.7,0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    CodeComponent code_ag_2
      Code Type = Auto->JS
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      Begin Routine:
        # set up
        trialClock = core.Clock()
        roiClock = core.Clock()

        gazeTime = 0
        gazeInROI = False
        continueRoutine = True
        sampleIndex = 0

        # Get aspect ratio
        aspect = win.size[0] / win.size[1]

        # Define ROI
        x0 = -aspect / 2
        x1 =  aspect / 2
        y0 = -0.5
        y1 =  0.5

        print('AG 2 started')
      Each Frame:
        # Get current time
        currentTime = trialClock.getTime()
        # Get current gaze
        gazePos = get_current_gaze()  # returns (x, y) in 'height' units

        if gazePos is not None:
            gazeX, gazeY = gazePos
            # Check if gaze is inside ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROI = 1
                if not gazeInROI:       # first frame in ROI
                    roiClock.reset()
                    gazeInROI = True
            else:
                if gazeInROI:           # gaze just left ROI
                    gazeTime += roiClock.getTime()  # finalize accumulated time
                    gazeInROI = False

        # If currently looking, report accumulated + current fixation
        if gazeInROI:
            currentGazeTime = gazeTime + roiClock.getTime()
        else:
            currentGazeTime = gazeTime

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('trial_time', currentTime)
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi_ag_2', inROI if 'inROI' in locals() else 0)
        thisExp.addData('gaze_time_ROI_ag_2', currentGazeTime)
        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)
    SoundComponent sound_2
      forceEndRoutine = False
      sound [set every repeat] = stimuli/audio/ag.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.75
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    ImageComponent first_frame_ag_2
      image = stimuli/images/first_frame_attention.png
      size = (0.7,0.4)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Test_Event_2
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    PolygonComponent ROI_right_2
      anchor = center-right
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (0.8, 0)
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    PolygonComponent ROI_left_2
      anchor = center-left
      fillColor = $(0.0000, 0.0000, 0.0000)
      lineColor = $(0.0000, 0.0000, 0.0000)
      pos = (-0.8, 0)
      shape = rectangle
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent imgLeft_2
      anchor = center-left
      image [set every repeat] = $left_image_path_2
      pos = (-0.8, 0)
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    ImageComponent imgRight_2
      anchor = center-right
      image [set every repeat] = $right_image_path_2
      pos = (0.8, 0)
      size = (0.65, 0.65)
      startVal [time (s)] = 0.0
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    CodeComponent code_test_2
      Code Type = Auto->JS
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      Begin Routine:
        # Timer for this trial
        trialClock = core.Clock()
        roiClockLeft = core.Clock()
        roiClockRight = core.Clock()

        # Gaze tracking
        sampleIndex = 0
        gazeX = float('nan')
        gazeY = float('nan')

        gazeTimeLeft = 0
        currentGazeTimeLeft = gazeTimeLeft
        inROILeft = 0
        gazeInROILeft = False

        gazeTimeRight = 0
        currentGazeTimeRight = gazeTimeRight
        inROIRight = 0
        gazeInROIRight = False

        gazeX = float('nan')
        gazeY = float('nan')

        # ROI_left uses anchor='center-left' (pos is midpoint of left edge)
        left_w, left_h = ROI_left_2.size
        x0 = ROI_left_2.pos[0]                  # left edge
        x1 = ROI_left_2.pos[0] + left_w         # right edge
        y0 = ROI_left_2.pos[1] - left_h / 2
        y1 = ROI_left_2.pos[1] + left_h / 2

        # ROI_right uses anchor='center-right' (pos is midpoint of right edge)
        right_w, right_h = ROI_right_2.size
        x2 = ROI_right_2.pos[0] - right_w       # left edge
        x3 = ROI_right_2.pos[0]                 # right edge
        y2 = ROI_right_2.pos[1] - right_h / 2
        y3 = ROI_right_2.pos[1] + right_h / 2

        # set test time
        maxTime = 5

        print('Test 2 started')
      Each Frame:
        # Current time
        currentTime = trialClock.getTime()
        # Get current gaze position
        gazePos = get_current_gaze()  # (x, y) or None

        if gazePos is not None:
            gazeX, gazeY = gazePos
            # Left ROI
            if x0 <= gazeX <= x1 and y0 <= gazeY <= y1:
                inROILeft = 1
                if not gazeInROILeft:
                    roiClockLeft.reset()
                    gazeInROILeft = True
            else:
                inROILeft = 0
                if gazeInROILeft:
                    gazeTimeLeft += roiClockLeft.getTime()
                    gazeInROILeft = False
            # If currently looking, report accumulated + current fixation
            if inROILeft:
                currentGazeTimeLeft = gazeTimeLeft + roiClockLeft.getTime()
            else:
                currentGazeTimeLeft = gazeTimeLeft
            # for debugging
            # print(f"Left: {currentGazeTimeLeft}")

            # Right ROI
            if x2 <= gazeX <= x3 and y2 <= gazeY <= y3:
                inROIRight = 1
                if not gazeInROIRight:
                    roiClockRight.reset()
                    gazeInROIRight = True
            else:
                inROIRight = 0
                if gazeInROIRight:
                    gazeTimeRight += roiClockRight.getTime()
                    gazeInROIRight = False
                # If currently looking, report accumulated + current fixation
            if inROIRight:
                currentGazeTimeRight = gazeTimeRight + roiClockRight.getTime()
            else:
                currentGazeTimeRight = gazeTimeRight
            # for debugging
            # print(f"Right: {currentGazeTimeRight}")

        # ---------- SAVE RAW GAZE SAMPLE ----------

        sampleIndex += 1
        thisExp.addData('gaze_sample_index', sampleIndex)
        thisExp.addData('trial_time', currentTime)
        thisExp.addData('gaze_x', gazeX if 'gazeX' in locals() else None)
        thisExp.addData('gaze_y', gazeY if 'gazeY' in locals() else None)
        thisExp.addData('gaze_in_roi_right_test_2', inROIRight)
        thisExp.addData('gaze_time_in_roi_right_test_2', currentGazeTimeRight)
        thisExp.addData('gaze_in_roi_left_test_2', inROILeft)
        thisExp.addData('gaze_time_in_roi_left_test_2', currentGazeTimeLeft)

        # Make a safe copy of latest_gaze to prevent thread issues
        current_sample = latest_gaze.copy() if latest_gaze else None

        # Save all raw gaze fields from latest_gaze
        if current_sample is not None:
            keys = list(current_sample.keys())
            for k in keys:
                thisExp.addData(k, current_sample[k])
        else:
            thisExp.addData('no_gaze_data', 1)

        thisExp.nextEntry()  # VERY IMPORTANT

        # time out for test phase
        if currentTime >= maxTime:
            continueRoutine = False
Flow
  Routine Calibration
  Routine Start_ET
  LoopInitiator trialLoop loopType="TrialHandler"
    conditionsFile = $"trials/mb5_trial_list_" + expInfo['order_number'] + ".csv"
    loopType = sequential
    nReps = 1
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    conditions:
      [{'image_fam': 'fractals/fractal_complex_pair1_a_bright.png', 'image_left': 'fractals/fractal_complex_pair1_a_bright.png', 'image_right': 'fractals/fractal_complex_pair1_b_bright.png', 'fam_IC_time': 5, 'fam_max_time': 10},
      {'image_fam': 'fractals/fractal_simple_pair1_a_bright.png', 'image_left': 'fractals/fractal_simple_pair1_b_bright.png', 'image_right': 'fractals/fractal_simple_pair1_a_bright.png', 'fam_IC_time': 10, 'fam_max_time': 20},
      {'image_fam': 'fractals/fractal_complex_pair2_a_bright.png', 'image_left': 'fractals/fractal_complex_pair2_a_bright.png', 'image_right': 'fractals/fractal_complex_pair2_b_bright.png', 'fam_IC_time': 15, 'fam_max_time': 30},
      {'image_fam': 'fractals/fractal_simple_pair2_a_bright.png', 'image_left': 'fractals/fractal_simple_pair2_b_bright.png', 'image_right': 'fractals/fractal_simple_pair2_a_bright.png', 'fam_IC_time': 5, 'fam_max_time': 10},
      {'image_fam': 'fractals/fractal_complex_pair3_a_bright.png', 'image_left': 'fractals/fractal_complex_pair3_a_bright.png', 'image_right': 'fractals/fractal_complex_pair3_b_bright.png', 'fam_IC_time': 10, 'fam_max_time': 20},
      {'image_fam': 'fractals/fractal_simple_pair3_a_bright.png', 'image_left': 'fractals/fractal_simple_pair3_b_bright.png', 'image_right': 'fractals/fractal_simple_pair3_a_bright.png', 'fam_IC_time': 15, 'fam_max_time': 30},
      {'image_fam': 'fribbles/Arrow_Complex.png', 'image_left': 'fribbles/Arrow_Complex.png', 'image_right': 'fribbles/Bowl_Complex.png', 'fam_IC_time': 5, 'fam_max_time': 10}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
    LoopInitiator pause_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 999
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      Routine Laughing_Baby
      Routine Pause_Image
    LoopTerminator pause_loop
    Routine Familiarization
    Routine Pre_Test_Attention_Getter
    Routine Test_Event_1
    Routine Mid_Test_Attention_Getter
    Routine Test_Event_2
  LoopTerminator trialLoop
  Routine Stop_ET
